<ReactionScheme>
<!--
     you can specify the units of the diffusion constant. If they are not
     specified they are assumed to be micron^2/second, (microns written "mu" here)
     it should understand microns, mm, and m for distances and seconds and ms for times
-->
    <Specie name="GaGTP"      id="GaGTP"      kdiff="300"  kdiffunit = "mu2/s"/>
    <Specie name="AC"         id="AC"         kdiff="0"    kdiffunit = "mu2/s"/>
    <Specie name="E"          id="E"          kdiff="0"    kdiffunit = "mu2/s"/>
    <Specie name="ATP"        id="ATP"        kdiff="300"  kdiffunit = "mu2/s"/>
    <Specie name="EATP"       id="EATP"       kdiff="0"    kdiffunit = "mu2/s"/>
    <Specie name="PKArc"      id="PKArc"      kdiff="0"    kdiffunit = "mu2/s"/>
    <Specie name="PKAcamp1"   id="PKAcamp1"   kdiff="0"    kdiffunit = "mu2/s"/>
    <Specie name="PKAcamp2"   id="PKAcamp2"   kdiff="0"    kdiffunit = "mu2/s"/>
    <Specie name="PKAc"       id="PKAc"       kdiff="30"   kdiffunit = "mu2/s"/>
    <Specie name="PKAr"       id="PKAr"       kdiff="0"    kdiffunit = "mu2/s"/>
<!--
     Nikolaev, O.V.; Lohse, M.J. (2004) Novel single chain cAMP sensors for
     receptor-induced signal propagation.............(cAMP diff ~270-780 mu2/s)
-->
    <Specie name="PDE4B"      id="PDE4B"      kdiff="0"    kdiffunit = "mu2/s"/>
    <Specie name="PDE4BcAMP"  id="PDE4BcAMP"  kdiff="0"    kdiffunit = "mu2/s"/>
    <Specie name="pPDE4B"     id="pPDE4B"     kdiff="0"    kdiffunit = "mu2/s"/>
    <Specie name="pPDE4BcAMP" id="pPDE4BcAMP" kdiff="0"    kdiffunit = "mu2/s"/>
    <Specie name="PDE4D"      id="PDE4D"      kdiff="0"    kdiffunit = "mu2/s"/>
    <Specie name="PDE4DcAMP"  id="PDE4DcAMP"  kdiff="0"    kdiffunit = "mu2/s"/>
    <Specie name="pPDE4D"     id="pPDE4D"     kdiff="0"    kdiffunit = "mu2/s"/>
    <Specie name="pPDE4DcAMP" id="pPDE4DcAMP" kdiff="0"    kdiffunit = "mu2/s"/>
    <Specie name="AMP"        id="AMP"        kdiff="300"  kdiffunit = "mu2/s"/>
    <Specie name="cAMP"       id="cAMP"       kdiff="300"  kdiffunit = "mu2/s"/>
    <Specie name="EPAc"       id="EPAc"       kdiff="0"    kdiffunit = "mu2/s"/>
    <Specie name="EPAccAMP"   id="EPAccAMP"   kdiff="0"    kdiffunit = "mu2/s"/>
    <!-- 1)  GaGTP + AC <-> E         -->
    <Reaction name = "GaGTP_AC reac" id="GaGTP_ACid">
        <Reactant specieID="GaGTP"           />
        <Reactant specieID="AC"              />
        <Product  specieID="E"               />
<!--
        Both (Kf and Kb) have been divided by a 1000 to convert from
        sec to msec (xpp->stochdif).
-->
        <forwardRate> 38461.5e-9 </forwardRate>
        <reverseRate> 10e-3      </reverseRate>
        <Q10>         0.2        </Q10>
    </Reaction>
    <!-- 2)  E + ATP    <-> EATP      -->
    <Reaction name = "E_ATP reac" id="E_ATPid">
        <Reactant specieID="E"               />
        <Reactant specieID="ATP"             />
        <Product  specieID="EATP"            />

        <forwardRate> 127600e-12 </forwardRate>
        <reverseRate> 0.2612e-03 </reverseRate>
        <Q10>         0.2        </Q10>
    </Reaction>
    <!-- 3)  EATP       <-> E + CAMP  -->
    <Reaction name = "EATP reac" id="EATPid">
        <Reactant specieID="EATP"            />
        <Product  specieID="E"               />
        <Product  specieID="cAMP"            />

        <forwardRate> 28.46e-03  </forwardRate>
        <reverseRate> 259200e-12 </reverseRate>
        <Q10>         0.2        </Q10>
    </Reaction>
    <!-- 4)  2cAMP + PKArc <-> PKAr2cAMP2c2         ( B site binding ) -->
    <Reaction name = "cAMP B bind" id="cAMP_B_bind">
        <Reactant specieID="PKArc"           />
        <Reactant specieID="cAMP"       n="2"/>
        <Product  specieID="PKAcamp1"        />
<!--
        <forwardRate> 4.3478e-08 </forwardRate>
        <reverseRate> 0.02e-03   </reverseRate>
        <Q10>         0.2        </Q10>
        In order to compensate for the cooperative binding of the 2nd cAMP
        Kf (forwardRate) has been multiplied by 2   (xpp->stochdif).
-->
        <forwardRate> 8.696e-08  </forwardRate>
        <reverseRate> 0.02e-03   </reverseRate>
        <Q10>         0.2        </Q10>
    </Reaction>
    <!-- 5)  2cAMP + PKAr2cAMP2c2 <-> PKAr2cAMP4c2  ( A site binding ) -->
    <Reaction name = "cAMP A bind" id="cAMP_A_bind">
        <Reactant specieID="PKAcamp1"        />
        <Reactant specieID="cAMP"       n="2"/>
        <Product  specieID="PKAcamp2"        />
<!--
        <forwardRate> 5.7703e-08 </forwardRate>
        <reverseRate> 0.2e-03    </reverseRate>
        <Q10>         2          </Q10>
-->
        <forwardRate> 1.154e-07  </forwardRate>
        <reverseRate> 0.2e-03    </reverseRate>
        <Q10>         2          </Q10>
    </Reaction>
    <!-- 6)  PKAr2cAMP4c2 <-> PKAr2camp4 + 2PKAc -->
    <Reaction name = "PKArc dissocation" id="PKAdissoc">
        <Reactant specieID="PKAcamp2"        />
        <Product  specieID="PKAr"            />
        <Product  specieID="PKAc"       n="2"/>
<!--
        <forwardRate> 0.016      </forwardRate>
        <reverseRate> 0.0017     </reverseRate>
        <Q10>         0.2        </Q10>
-->
        <forwardRate> 0.016e-03  </forwardRate>
        <reverseRate> 0.0017e-03 </reverseRate>
        <Q10>         0.2        </Q10>
    </Reaction>
    <!-- 7)  cAMP + PDE4B  <-> PDE4BcAMP -->
    <Reaction name = "PDE4B enzyme1" id="PDE4Bbind">
        <Reactant specieID="PDE4B"           />
        <Reactant specieID="cAMP"            />
        <Product  specieID="PDE4BcAMP"       />

        <forwardRate> 0.03e-03   </forwardRate>
        <reverseRate> 77.44e-03  </reverseRate>
        <Q10>         0.2        </Q10>
    </Reaction>
    <!-- 8)  PDE4BcAMP -> AMP + PDE4B -->
    <Reaction name = "PDE4B actvcomp" id="PDE4Bcat">
        <Reactant specieID="PDE4BcAMP"       />
        <Product  specieID="PDE4B"           />
        <Product  specieID="AMP"             />

        <forwardRate> 19.36e-03  </forwardRate>
        <reverseRate> 0          </reverseRate>
        <Q10>         0.2        </Q10>
    </Reaction>
    <!-- 9)  PKAc + PDE4B -> PKAc + pPDE4B -->
    <Reaction name = "PDE4B phosp" id="phospPDE4B">
        <Reactant specieID="PKAc"            />
        <Reactant specieID="PDE4B"           />
        <Product  specieID="PKAc"            />
        <Product  specieID="pPDE4B"          />

        <forwardRate> 1.36e-07   </forwardRate>
        <reverseRate> 0          </reverseRate>
        <Q10>         0.2        </Q10>
    </Reaction>
    <!-- 10)  cAMP + pPDE4B  <-> pPDE4BcAMP -->
    <Reaction name = "pPDE4B enzyme1" id="pPDE4Bbind">
        <Reactant specieID="pPDE4B"           />
        <Reactant specieID="cAMP"            />
        <Product  specieID="pPDE4BcAMP"       />

        <forwardRate> 0.03e-03   </forwardRate>
        <reverseRate> 77.44e-03  </reverseRate>
        <Q10>         0.2        </Q10>
    </Reaction>
    <!-- 11)  pPDE4BcAMP -> AMP + pPDE4B -->
    <Reaction name = "pPDE4B actvcomp" id="pPDE4Bcat">
        <Reactant specieID="pPDE4BcAMP"       />
        <Product  specieID="pPDE4B"           />
        <Product  specieID="AMP"             />

        <forwardRate> 27.104e-03 </forwardRate>
        <reverseRate> 0          </reverseRate>
        <Q10>         0.2        </Q10>
    </Reaction>
    <!-- 12)  cAMP + PDE4D  <-> PDE4DcAMP -->
    <Reaction name = "PDE4D enzyme1" id="PDE4Dbind">
        <Reactant specieID="PDE4D"           />
        <Reactant specieID="cAMP"            />
        <Product  specieID="PDE4DcAMP"       />

        <forwardRate> 0.012e-03  </forwardRate>
        <reverseRate> 58.82e-03  </reverseRate>
        <Q10>         0.2        </Q10>
    </Reaction>
    <!-- 13)  PDE4DcAMP -> AMP + PDE4D -->
    <Reaction name = "PDE4D actvcomp" id="PDE4Dcat">
        <Reactant specieID="PDE4DcAMP"       />
        <Product  specieID="PDE4D"           />
        <Product  specieID="AMP"             />

        <forwardRate> 14.70e-03  </forwardRate>
        <reverseRate> 0          </reverseRate>
        <Q10>         0.2        </Q10>
    </Reaction>
    <!-- 14)  PKAc + PDE4D -> PKAc + pPDE4D -->
    <Reaction name = "PDE4D phosp" id="phospPDE4D">
        <Reactant specieID="PKAc"            />
        <Reactant specieID="PDE4D"           />
        <Product  specieID="PKAc"            />
        <Product  specieID="pPDE4D"          />

        <forwardRate> 1.36e-07   </forwardRate>
        <reverseRate> 0          </reverseRate>
        <Q10>         0.2        </Q10>
    </Reaction>
    <!-- 15)  cAMP + pPDE4D  <-> pPDE4DcAMP -->
    <Reaction name = "pPDE4D enzyme1" id="pPDE4Dbind">
        <Reactant specieID="pPDE4D"           />
        <Reactant specieID="cAMP"            />
        <Product  specieID="pPDE4DcAMP"       />

        <forwardRate> 0.012e-03  </forwardRate>
        <reverseRate> 58.82e-03  </reverseRate>
        <Q10>         0.2        </Q10>
    </Reaction>
    <!-- 16)  pPDE4DcAMP -> AMP + pPDE4D -->
    <Reaction name = "pPDE4D actvcomp" id="pPDE4Dcat">
        <Reactant specieID="pPDE4DcAMP"       />
        <Product  specieID="pPDE4D"           />
        <Product  specieID="AMP"             />

        <forwardRate> 20.58e-03  </forwardRate>
        <reverseRate> 0          </reverseRate>
        <Q10>         0.2        </Q10>
    </Reaction>
    <!-- 17)  AMP -> ATP -->
    <Reaction name = "AMP reac" id="AMP_id">
        <Reactant specieID="AMP"             />
        <Product  specieID="ATP"             />

        <forwardRate> 28.46e-03  </forwardRate>
        <reverseRate> 0          </reverseRate>
        <Q10>         0.2        </Q10>
    </Reaction>

    <!-- 18)  EPAc + cAMP -> EPAccAMP -->
    <Reaction name = "EPAccAMP reac" id="EPAccAMP_id">
        <Reactant specieID="EPAc"            />
        <Reactant specieID="cAMP"            />
        <Product  specieID="EPAccAMP"        />

        <forwardRate> 2.78e-06   </forwardRate>
        <reverseRate> 3.47e-04   </reverseRate>
        <Q10>         0.2        </Q10>
    </Reaction>
</ReactionScheme>