<ReactionScheme>

    <!-- you can specify the units of the diffusion constant. If they are not
         specified they are assumed to be micron^2/second, (microns written "mu" here)
         it should understand microns, mm, and m for distances and seconds and ms for times -->
    <Specie name="cAMP"       id="cAMP"      kdiff="0"    kdiffunit = "mu2/s"/>
    <Specie name="EPAc"       id="EPAc"      kdiff="0"    kdiffunit = "mu2/s"/>
    <Specie name="EPAccAMP"   id="EPAccAMP"  kdiff="0"    kdiffunit = "mu2/s"/>


    <!-- 1)  EPAc + cAMP -> EPAccAMP -->
    <Reaction name = "EPAccAMP reac" id="EPAccAMP_id">
        <Reactant specieID="EPAc"            />
        <Reactant specieID="cAMP"            />
        <Product  specieID="EPAccAMP"        />

        <forwardRate> 2.78e-10   </forwardRate>        <!-- 2.78e-06 -->
		<reverseRate> 0.0   </reverseRate>
       <!-- <reverseRate> 3.41e-05   </reverseRate>        <!-- 3.47e-04 -->
        <Q10>         0.2        </Q10>
    </Reaction>
</ReactionScheme>
