<ReactionScheme>
    
    <!-- you can specify the units of the diffusion constant. If they are not 
	 specified they are assumed to be micron^2/second, (microns written "mu" here)
	 it should understand microns, mm, and m for distances and seconds and ms for times --> 

    <Specie name="SpecieA" id="a" kdiff="20" kdiffunit = "mu2/s"/>
    <Specie name="SpecieB" id="b" kdiff="20" kdiffunit = "mu2/s"/>
    <Specie name="SpecieC" id="c" kdiff="0.000" kdiffunit = "mu2/ms"/>
    <Specie name="SpecieD" id="d" kdiff="0.000" kdiffunit = "mu2/ms"/>

    <Reaction name = "Reaction 1" id="r1">
	<Reactant specieID="a"/>
	<Reactant specieID="b"/>
	<Product specieID="c"/>

	<forwardRate>0.00100</forwardRate>
	<reverseRate>0.00100</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>

	

</ReactionScheme>
